PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SSVEP_Gabriel
  keyboardBackend = ioHub
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Routines
  Routine Combined_trial
    PolygonComponent black_square_2
      durationEstim = 0.067
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0
      shape = rectangle
      size = (0.5, 0.5)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 4
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    PolygonComponent white_square_2
      durationEstim = 0.067
      fillColor = 1.0000, 1.0000, 1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startEstim = 0.067
      startVal [condition] = black_square_2.status==FINISHED
      stopVal [duration (frames)] = 4
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    TextComponent Fixation_cross
      color = 1.0000, -1.0000, -1.0000
      durationEstim = 0.13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = white_square_2.status==FINISHED
      text = +
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  Routine Start
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Flicker task!

        When ready to start, please press SPACE
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thanks for participating!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 900
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    Routine Combined_trial
  LoopTerminator trials
  Routine End
